#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3				// Use modern global access method and strict wave access
#pragma IgorVersion  = 9
#pragma DefaultTab={3,20,4}		// Set default tab width in Igor Pro 9 and later
#pragma ModuleName = ATH_MagDom
#pragma version = 1.0



static Function FitXMLDMap(WAVE wRef, [string fitFunc,
				variable firstAngle, variable angleStep, int fastFit])
	
	/// -------------------------------------------  XMLD Map  --------------------------------------------
	///
	/// Calculates an XMLD-intensity map by fitting **ATH_FuncFit#XMLDIntensity** to every beam
	/// (pixel) along the *z*-axis of a 3-D wave containing XMLD images acquired at different x-ray
	/// inclination angles.
	///
	/// The model assumes that the XMLD signal follows:
	///
	///     I(x) = A + B·cos(2(x + φ)) // default, user can set any function
	///
	/// with *A*, *B*, and *φ* as the fitting parameters.
	///
	/// ### Parameters
	/// | Name           | Type     | Default| Description                                                                                           |
	/// |-------------   |----------|--------|-------------------------------------------------------------------------------------------------------|
	/// | **wRef**       | WAVE     |    -   | 3-D wave whose *z* dimension lists the inclination angles in ascending order (typically −90° to +90°) |
	/// | **fitFunx   ** | string   | Cos(2x)| Fuction to fit, defaults to ATH_FuncFit#XMLDCos2xIntensity, see ATH_FuncFit module for more options   |                                             |	
	/// | **firstAngle** | variable | −90 °  | Inclination (degrees) corresponding to the first plane of the stack                                                |
	/// | **angleStep**  | variable |  10 °  | Angular increment (degrees) between successive *z* planes                                             |
	/// | **fastFit**    | variable |    0   | If non-zero, tests several phase values and keeps the one with the lowest χ² (≈ N × slower)           |
	///
	/// ---
	/// **Advanced curve-fitting tip**  
	/// To weight individual angles, create a sigma wave of length `DimSize(wRef,2)` and pass it to
	/// **FuncFit** via the `/W=<sigmaWave>` flag.
	///
	/// *See also*: *DisplayHelpTopic* “Special Variables for Curve Fitting”.
	///
	/// Note: You have to set the firstAngle correctly if you want to have the spin axis for θ = 0 along the x-axis.
	/// 
	/// Use the FoVRot = θ value (in deg) as set in the metadata to set the -90 or 90 (LV light) light orientation in the lab reference to
	/// -90 + θ, 90 + θ, respectively.In this setting the LH axis will be at θ or 180+θ. The resulting NameOfWave(wRef)+"_map" wave will 
	/// have the axis x corresponsing to φ = 0 for the spin axis.
	
	fastFit = ParamIsDefault(fastFit) ? 1 : fastFit
	
	variable firstAngleRad = ParamIsDefault(firstAngle) ? -90 * pi/180 : firstAngle * pi/180
	variable angleStepRad = ParamIsDefault(angleStep) ? 10*pi/180 : angleStep * pi/180
	// Which model do you like to fit? Check functions in the module ATH_FuncFit
	if(ParamIsDefault(fitFunc))
		fitFunc = "ATH_FuncFit#XMLDCos2xIntensity" // default
	endif
	// Calculate the angular offset, rotate by -FoVRotRad and apply mirror operation over x-axis
	
	variable rows = DimSize(wRef, 0)
	variable cols = DimSize(wRef, 1)
	variable layers = DimSize(wRef, 2)

	if(!layers)
		return 1
	endif
	variable i, j, k, cnt
	string mapBaseNameStr = NameofWave(wRef) + "_map"
	string mapNameStr = CreateDataObjectName(dfr, mapBaseNameStr, 1, 0 ,1)
	Make/N=(rows, cols) $mapNameStr, $(mapNameStr+"_offset"), $(mapNameStr+"_amplitude")
	WAVE wphase = $mapNameStr
	WAVE woff = $(mapNameStr+"_offset")
	WAVE wfact = $(mapNameStr+"_amplitude")
	// Make the fitting waves:  K0 + K1 * Cos(2*(x + K2))
	Make/FREE/D/N=3 ATH_Coef
	// Fit can be very sensity to contrains! Read the manual!
	// ********************YOU NEED TO TUNE HERE************************
	//
	// Choose carefully the parameter K1, if it's zero then a lot of errors will occur
	// as K1->0 reduces the functional dependency to a constant function!
	// We will assume of K1 hits the lowest value then K2 == 0!
	//
	Make/FREE/N=(layers) freeData // Get data per beam to fit
	SetScale/P x, firstAngleRad, angleStepRad, freeData // Set the scale, and FoVRot
	Make/O/D/N=(rows, cols, 3) ATH_FitCoeff // Fit coefficients per pixel
	variable V_FitError
	variable errorCnt = 0
	// *****************************************************************	
	Make/FREE/T ATH_Constraints = {"K1>1e-3","K2 > -pi/2", "K2 <= pi/2"} // N.B: Set here constrains
	// Let's fit all pixels in the image
	if(fastFit)
		for(i = 0; i < rows; i++)
			for(j = 0; j < cols; j++)
				// /S keeps scaling in MatrixOP
				// N.B. If you add /FREE here the scaling will be lost!!!
				MatrixOP/O/S freeData = beam(wRef, i, j)
				WaveStats/M=1/Q freeData // Makes it slower, but initial guess is better. Is it helpful?
				V_FitError = 0 // Set it to zero before the fit
				ATH_Coef = {V_avg, 0.5*(V_max-V_min),0.1} // N.B!! You might need to play a bit with the initial guess
				FuncFit/Q $fitFunc, kwCWave=ATH_Coef, freeData /D /C=ATH_Constraints
				if(V_FitError)
					// Deal with error here....
					errorCnt++
				endif
				ATH_FitCoeff[i][j][] = ATH_Coef[r]
			endfor
		endfor
	else
		// *****************************************************************
		// How many initial guesses for phase do you want to try?
		// Enter the values in curly brackets.
		// ******************************************************
		Make/FREE initialGuessPhaseW = {-pi/4,0,pi/4}; // <<<<<<<
		// ******************************************************
		variable kmax = numpnts(initialGuessPhaseW)
		Make/FREE/N=(kmax) chisqList
		Make/FREE/N=(kmax,3) coeffW
		for(i = 0; i < rows; i++)
			for(j = 0; j < cols; j++)
				// /S keeps scaling in MatrixOP
				// N.B. If you add /FREE here the scaling will be lost!!!
				MatrixOP/O/S freeData = beam(wRef, i, j)
				WaveStats/M=1/Q freeData // Makes it slower, but initial guess is better.
				V_FitError = 0 // Set it to zero before the fit
				for(k=0;k<kmax;k++)
					ATH_Coef = {V_avg, 0.5*(V_max-V_min),initialGuessPhaseW[k]} // N.B!! You might need to play a bit with the initial guess
					FuncFit/Q $fitFunc, kwCWave=ATH_Coef, freeData /D /C=ATH_Constraints
					coeffW[k][] = ATH_Coef[q]
					chisqList[k] = V_chisq // Goodness of fit
				endfor
				if(V_FitError)
					// Deal with error here....
					errorCnt++
				endif
				ATH_FitCoeff[i][j][] = coeffW[ATH_WaveOp#GetWaveMinPos(chisqList)][r] // Get the fitted coeff with the lower V_chisq
			endfor
		endfor
	endif
	// Write the coefficients to waves
	woff[][] =  ATH_FitCoeff[p][q][0]
	wfact[][] = ATH_FitCoeff[p][q][1]
	wphase[][] = ATH_FitCoeff[p][q][2]*57.29577951 // From rad to deg
	print "Total fit errors ", errorCnt
	string metadata = "FuncFit: "+ fitFunc + "."
	metadata += "Fitting constrains: {"+RemoveEnding(ATH_TWave#TextWaveToString(ATH_Constraints, sep=","))+"}."
	metadata += "Function parameters: firstAngle="+num2str(firstangle)+" ,angleStep="+num2str(angleStep)
	metadata += ", fastFit="+num2str(fastFit)+". Total fit errors: "+num2str(errorCnt)	
	Note wphase, metadata
	Note wfact, metadata
	Note woff, metadata
	CopyScales wRef, wphase, wfact, woff
	KillWaves/Z W_sigma, ATH_FitCoeff, fit__free_ // Cleanup the garbage
End

/// Helping functions moved from ATH_Cursors
/// Beam fitting map
/// Generic interaction using a cursor and a CallbackFunction

static Function InteractiveXMLDFitInspection(WAVE wSrc, WAVE wRef,[variable firstAngle, variable angleStep])
	/// Interactive operation using a callback function
	/// ATH_Cursors#CursorCallBack(WAVE wSrc, WAVE wRef, variable p0, variable q0)
	//
	// WAVE wSrc - 3D Wave with XMLD images for different angles
	// WAVE wRef - Wave calculated using CalculateXMLDMap
	//
	variable firstAngleRad = ParamIsDefault(firstAngle) ? -90 * pi/180 : firstAngle * pi/180
	variable angleStepRad = ParamIsDefault(angleStep) ? 10*pi/180 : angleStep * pi/180
		
	string winNameStr = ATH_Display#NewImg(wRef)
	string imgNameTopGraphStr = StringFromList(0, ImageNameList(winNameStr, ";"),";")
	variable nrows = DimSize(wRef, 0)
	variable ncols = DimSize(wRef, 1)	
	Cursor/I/C=(65535,65535,0)/S=1/P/N=1 J $imgNameTopGraphStr nrows/2, ncols/2
	// Make folder in database
	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF("root:Packages:ATH_DataFolder:iCursorAction:" + imgNameTopGraphStr) // Root folder here
	// Store globals
	string/G dfr:gATH_wRefPath = GetWavesDataFolder(wRef, 2)
	string/G dfr:gATH_wSrcPath = GetWavesDataFolder(wSrc, 2)
	variable/G dfr:gATH_firstAngle = firstAngleRad
	variable/G dfr:gATH_angleStep = angleStepRad
	// Hook and metadata
	SetWindow $winNameStr, hook(MyiCursorActionHook) = ATH_MagDom#iCursorUsingCallbackHookFunction // Set the hook
	SetWindow $winNameStr, userdata(MyiCursorWin) = winNameStr
	SetWindow $winNameStr, userdata(ATH_iCursorDFR) = "root:Packages:ATH_DataFolder:iCursorAction:" + imgNameTopGraphStr
	Display/N=$(winNameStr + "_iFitPlot")/K=1
	DoWindow/F $winNameStr
	SetWindow $winNameStr, userdata(MyiplotWin) = winNameStr + "_iFitPlot"
	return 0
End

static Function iCursorUsingCallbackHookFunction(STRUCT WMWinHookStruct &s)
	variable hookResult = 0
	string imgNameTopGraphStr = StringFromList(0, ImageNameList(s.WinName, ";"),";")
	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF("root:Packages:ATH_DataFolder:iCursorAction:" + imgNameTopGraphStr)
	string plotNameStr = GetUserData(s.winName, "", "MyiplotWin")
	SVAR/SDFR=dfr gATH_wRefPath, gATH_wSrcPath
	WAVE/Z wRef = $gATH_wRefPath
	WAVE/Z wSrc = $gATH_wSrcPath
	switch(s.eventCode)
		case 2:
			KillWindow/Z $plotNameStr
			KillDataFolder/Z dfr
			break
		case 7: // cursor moved
			if(!cmpstr(s.cursorName, "J")) // It should work only with E, F you might have other cursors on the image
				CursorCallBack(wSrc, wRef, s.pointNumber, s.ypointNumber) // Function using row, column
				//CursorCallBack3(wRef, s.pointNumber, s.ypointNumber) // Function using row, column
			endif
			hookResult = 1
			break
		case 11: // Keyboard event
			if(s.specialKeyCode == 204) //  Esc
				SetWindow $s.winName, hook(MyiCursorActionHook) = $""
				Cursor/K/W=$s.winName B
				KillDataFolder/Z dfr
			endif
	endswitch
	return hookResult       // 0 if nothing done, else 1
End

static Function CursorCallBack(WAVE wSrc, WAVE wRef, variable p0, variable q0)
	
	DFREF dfr = $GetUserData("", "", "ATH_iCursorDFR")
	DFREF wdfr = GetWavesDataFolderDFR(wRef)
	string winNameStr = GetUserData("", "", "MyiCursorWin")
	string plotNameStr = GetUserData("", "", "MyiplotWin")
	NVAR/SDFR=dfr gATH_firstAngle, gATH_angleStep
	
	MatrixOP/O dfr:cursorBeamProfile = beam(wSrc, p0, q0)
	WAVE wOff = wdfr:$(NameOfWave(wRef)+"_offset")
	WAVE wA = wdfr:$(NameOfWave(wRef)+"_amplitude")
	Make/O dfr:fitPlotW /WAVE=wcos
	SetScale/I x, gATH_firstAngle, gATH_firstAngle + gATH_angleStep * numpnts(dfr:cursorBeamProfile), wcos, dfr:cursorBeamProfile
	variable x0 = wOff[p0][q0]
	variable A = wA[p0][q0]
	variable phase = wRef[p0][q0]
	// N.B: Change here if you change the fitting function
	wcos = x0 + A * cos(2*(x + phase*0.01745329-13*pi/180)) // Phase to rad
	RemoveFromGraph/W=$plotNameStr/ALL
	AppendToGraph/W=$plotNameStr dfr:cursorBeamProfile
	ModifyGraph/W=$plotNameStr mode(cursorBeamProfile)=3,marker(cursorBeamProfile)=19,msize(cursorBeamProfile)=4
	AppendToGraph/W=$plotNameStr wcos 
	ModifyGraph/W=$plotNameStr lsize(fitPlotW)=2,rgb(fitPlotW)=(1,16019,65535)
	TextBox/W=$plotNameStr/C/F=0/N=phaseTag "\\Z16φ="+num2str(phase)		
	return 0
End
