#pragma TextEncoding = "UTF-8"
#pragma rtGlobals=3				// Use modern global access method and strict wave access
#pragma DefaultTab={3,20,4}		// Set default tab width in Igor Pro 9 and later
#pragma IgorVersion = 9
#pragma ModuleName = ATH_Marquee
#pragma version = 1.01

// ------------------------------------------------------- //
// Copyright (c) 2022 Evangelos Golias.
// Contact: evangelos.golias@gmail.com
//	
//	Permission is hereby granted, free of charge, to any person
//	obtaining a copy of this software and associated documentation
//	files (the "Software"), to deal in the Software without
//	restriction, including without limitation the rights to use,
//	copy, modify, merge, publish, distribute, sublicense, and/or sell
//	copies of the Software, and to permit persons to whom the
//	Software is furnished to do so, subject to the following
//	conditions:
//	
//	The above copyright notice and this permission notice shall be
//	included in all copies or substantial portions of the Software.
//	
//	THE SOFTWARE IS PROVIDED "AS IS", WITHOUT WARRANTY OF ANY KIND,
//	EXPRESS OR IMPLIED, INCLUDING BUT NOT LIMITED TO THE WARRANTIES
//	OF MERCHANTABILITY, FITNESS FOR A PARTICULAR PURPOSE AND
//	NONINFRINGEMENT. IN NO EVENT SHALL THE AUTHORS OR COPYRIGHT
//	HOLDERS BE LIABLE FOR ANY CLAIM, DAMAGES OR OTHER LIABILITY,
//	WHETHER IN AN ACTION OF CONTRACT, TORT OR OTHERWISE, ARISING
//	FROM, OUT OF OR IN CONNECTION WITH THE SOFTWARE OR THE USE OR
//	OTHER DEALINGS IN THE SOFTWARE.
// ------------------------------------------------------- //

/// @module ATH_Marquee
/// @brief Module ATH_Marquee.
/// @details
/// This module belongs to the ATH Igor Pro toolkit and contains procedures
/// related to ATH Marquee functionality.

Structure sUserMarqueePositions
	// Used in ATH_UserGetMarqueePositions
	variable left
	variable right
	variable top
	variable bottom
	variable canceled
EndStructure

/// @function MarqueeToMask
/// @brief Description of MarqueeToMask.
/// @details
/// Auto-generated documentation stub for function `MarqueeToMask`.
/// @returns Variable Return value.

static Function/S MarqueeToMask([string grfName])
	grfName = SelectString(ParamIsDefault(grfName) ? 0: 1, WinName(0, 1, 1), grfName) // Empty case will be handled below
	string axisX, axisY
	[axisX, axisY] = ATH_Graph#GetAxes()
	GetMarquee/K $axisX, $axisY
	if(!V_flag)
		return ""
	endif
	string maskPathStr = CoordinatesToROIMask(V_left, V_top, V_right, V_bottom, grfName = grfName)
	return maskPathStr // return the path of M_ROIMask
End

static Function/S CoordinatesToROIMask(variable left, variable top, variable right, variable bottom, 
				[variable interior, variable exterior, variable spW, string grfName])
	/// Generate a Mask from Marquee
	/// The graph should have left, top axes
	/// By default the mask generated by ImageGenerateROIMask has 1 interior and 0 exterio values
	/// you can change the mask values with the optional parameters.
	
	grfName = SelectString(ParamIsDefault(grfName) ? 0: 1, WinName(0, 1, 1), grfName) // Empty case will be handled below
	/// Creates the wave M_ROIMask
	interior = ParamIsDefault(interior) ? 1: interior
	exterior = ParamIsDefault(exterior) ? 0: exterior
	string maskPathStr
	WAVE wRef = ATH_Graph#TopImageToWaveRef(grfName = grfName)
	DoWindow/F $grfName // You need to have your imange stack as a top window
	SetDrawLayer ProgFront // ImageGenerateROIMask needs ProgFront layer
	DrawAction  delete
	SetDrawEnv linefgc = (65535,16385,16385), fillpat = 0, linethick = 0.5, xcoord = top, ycoord = left
	DrawRect/W=$grfName left, top, right, bottom
	// Create the mask in the source wave data folder. Made the change on the 27.03.2026
	// so that the remove background operation using a marquee works for iXMCD operation
	DFREF saveDF = GetDataFolderDFR()
	SetDataFolder GetWavesDataFolderDFR(wRef)
	ImageGenerateROIMask/W=$grfName/i=(interior)/e=(exterior) $NameOfWave(wRef)
	WAVE/Z M_ROIMask
	if(V_flag)
		maskPathStr = GetWavesDataFolder(M_ROIMask, 2)
	else
		maskPathStr = ""
	endif

	if(spW) // converts to single-specision float
		Redimension/S M_ROIMask
	endif
		
	// Add a note to the mask
	string maskNotePattern = "Background area [left, top, right, bottom]=[%d,%d,%d,%d]", maskNote
	sprintf maskNote, maskNotePattern, left, top, right, bottom
	Note M_ROIMask, maskNote
	SetDataFolder saveDF
	
	variable domask = V_flag
	DrawAction  delete
	SetDrawLayer UserFront
	

	return maskPathStr // "" if mask fails, otherwise the pathname of M_ROIMask
End

static Function/WAVE WAVECoordinatesToROIMask(variable left, variable top, variable right, 
											  variable bottom, [variable interior, variable exterior])
	/// Creates the wave M_ROIMask
	interior = ParamIsDefault(interior) ? 1: interior // if set do not read metadata
	exterior = ParamIsDefault(exterior) ? 0: exterior // if set do not read metadata
	string winNameStr = WinName(0, 1, 1)
	string wnamestr = ATH_Graph#TopImageName(grfName=winNameStr)
	DoWindow/F $winNameStr // You need to have your imange stack as a top window
	SetDrawLayer ProgFront // ImageGenerateROIMask needs ProgFront layer
	SetDrawEnv linefgc = (65535,16385,16385), fillpat = 0, linethick = 0.5, xcoord = top, ycoord = left
	DrawRect/W=$winNameStr left, top, right, bottom
	ImageGenerateROIMask/i=(interior)/e=(exterior) $wnamestr
	DrawAction  delete
	SetDrawLayer UserFront
	WAVE M_ROIMask
	Duplicate/O/FREE M_ROIMask, ATH_ROIMask
	Redimension/S ATH_ROIMask
	KillWaves/Z M_ROIMask
	return ATH_ROIMask
End

/// @function PartitionRegion
/// @brief Description of PartitionRegion.
/// @details
/// Auto-generated documentation stub for function `PartitionRegion`.
/// @param evenNum Parameter evenNum.
/// @param square] Parameter square].
/// @returns Variable Return value.

static Function PartitionRegion([int evenNum, int square])
	evenNum = ParamIsDefault(evenNum) ? 1 : evenNum
	square = ParamIsDefault(square) ? 0 : square
	string grfName = WinName(0, 1, 1)
	string xaxis, yaxis
	[xaxis, yaxis] = ATH_Graph#GetAxes(grfName=grfName) // Use top graph
	GetMarquee/W=$grfName/K $xaxis, $yaxis
	string imgNameTopGraphStr = StringFromList(0, ImageNameList(grfName, ";"),";")
	WAVE waveRef = ImageNameToWaveRef(grfName, imgNameTopGraphStr) // full path of wave
	DFREF currDF = GetDataFolderDFR()
	string stacknameStr = CreateDataObjectName(currDF, NameOfWave(waveRef) + "_PART", 1, 0, 1)
	// Use NameOfWave(waveRef) instead of imgNameTopGraphStr as the ' ' will be replace by _!
	ATH_WaveOp#WavePartition(waveRef, stacknameStr, V_left, V_right, V_top, V_bottom, \
	evenNum = evenNum, square = square)
	WAVE/Z wavePRT = $stacknameStr
	if(!WaveExists(wavePRT)) // Wave does not exists, operation failed.
		return 1
	endif
	//CopyScales/P waveRef, wavePRT // Change, keep the original x, y offsets
	return 0
End

static Function [variable flag, variable leftR, variable rightR, variable topR, variable bottomR] GetMarqueeToIndex([string grfName, string axisX, string axisY])
	grfName = SelectString(ParamIsDefault(grfName) ? 0: 1, WinName(0, 1, 1), grfName)
	axisX = SelectString(ParamIsDefault(axisX) ? 0: 1,"left", axisX)
	axisY = SelectString(ParamIsDefault(axisY) ? 0: 1,"top", axisY)
	variable errCode
	
	WAVE wRef = ATH_Graph#TopImageToWaveRef(grfName=grfName)
	GetMarquee/W=$grfName $axisX, $axisY; errCode = GetRTError(1);
	flag = V_flag
	if(errCode)
		print GetErrMessage(errCode)
		return [flag, -1, -1, -1, -1]
	endif
	leftR = ScaleToIndex(wRef, V_left, 0)
	rightR = ScaleToIndex(wRef, V_right, 0)
	topR = ScaleToIndex(wRef, V_top, 1)
	bottomR = ScaleToIndex(wRef, V_bottom, 1)
	return [flag, leftR, rightR, topR, bottomR]
End

/// @function GetMarqueeWaveStats
/// @brief Description of GetMarqueeWaveStats.
/// @details
/// Auto-generated documentation stub for function `GetMarqueeWaveStats`.
/// @returns Variable Return value.

static Function GetMarqueeWaveStats()
	/// Wavestats for a marquee region in a 2D wave. In case of a 3D wave the stats
	/// are calculated for all layers.
	GetMarquee/Z
	variable plane, flag, left, right, top, bottom
	string imgNameTopGraphStr = StringFromList(0, ImageNameList("", ";"),";"), msg, cmd
	WAVE wRef = ImageNameToWaveRef("", imgNameTopGraphStr) // full path of wave
	string infoStr = ImageInfo(WinName(0, 1, 1), imgNameTopGraphStr, 0)
	plane = NumberByKey("plane", infoStr, "=")	
	[flag, left, right, top, bottom] = GetMarqueeToIndex()
	msg = "\n##--------------------------------------------------##\n"
	msg += "Statistics of " + GetWavesDataFolder(wRef, 2) + "\n"
	msg += "Marquee: left = "+num2str(IndexToScale(wRef, left, 0)) + "; "
	msg += "right = "+num2str(IndexToScale(wRef, right, 0)) + "; "
	msg += "top = "+num2str(IndexToScale(wRef, top, 1)) + "; "
	msg += "botttom = "+num2str(IndexToScale(wRef, bottom, 1)) + "; "
	if(WaveDims(wRef)==3)
		msg += "plane = " + num2str(plane) + "\n"
	endif	
	if(WaveDims(wRef) == 2 || WaveDims(wRef)==3)
		print msg
		WaveStats/RMD=[left, right][top, bottom][plane] wRef
		print "%%--------------------------------------------------%%"
	else
		return -1
		//TODO: Make it work with traces. You need TraceNameToWaveRef
	endif
	return 0
End

/// @function CheckActiveAxis
/// @brief Description of CheckActiveAxis.
/// @details
/// Auto-generated documentation stub for function `CheckActiveAxis`.
/// @param graphname Parameter graphname.
/// @param axis Parameter axis.
/// @returns Variable Return value.

static Function CheckActiveAxis(string graphname, string axis)
	/// If axis is present, return 1 otherwise 0
	/// graphnname = "" we refer to the top window
	if (strlen(AxisInfo(graphname, axis)))
		return 1
	else 
		return 0
	endif
End

/// @function SaveROICoordinatesToDatabase
/// @brief Description of SaveROICoordinatesToDatabase.
/// @details
/// Auto-generated documentation stub for function `SaveROICoordinatesToDatabase`.
/// @param rect] Parameter rect].
/// @returns Variable Return value.

static Function SaveROICoordinatesToDatabase([variable rect])
	// Save ROI to database and draw it on image's UserFront
	rect = ParamIsDefault(rect) ? 0: rect
	string dfrStr = "root:Packages:ATH_DataFolder:SavedROI"
	DFREF dfr = ATH_DFR#CreateDataFolderGetDFREF(dfrStr)
	GetMarquee/K left, top
	variable/G dfr:gATH_Sleft = V_left
	variable/G dfr:gATH_Sright = V_right
	variable/G dfr:gATH_Stop = V_top
	variable/G dfr:gATH_Sbottom = V_bottom
	variable/G dfr:gATH_SrectQ = rect
	SetDrawLayer UserFront // ImageGenerateROIMask needs ProgFront layer
	SetDrawEnv linefgc = (65535,0,0), fillpat = 0, linethick = 1, dash= 2, xcoord = top, ycoord = left
	if(rect)
		DrawRect V_left, V_top, V_right, V_bottom
	else
		DrawOval V_left, V_top, V_right, V_bottom	
	endif
	return 0
End

// The following three function let you select an area on a 2d/3d wave and return the coordinates.
static Function [variable leftR, variable rightR, variable topR, variable bottomR] UserGetMarqueePositions(STRUCT sUserMarqueePositions &s)
	//
	string winNameStr = WinName(0, 1, 1)	
	DoWindow/F $winNameStr			// Bring graph to front
	if (V_Flag == 0)					// Verify that graph exists
		Abort "WM_UserSetMarquee: No image in top window."
	endif
	string structStr
	string panelNameStr = UniqueName("PauseforCursor", 9, 0)
	NewPanel/N=$panelNameStr/K=2/W=(139,341,382,450) as "Set marquee on image"
	AutoPositionWindow/E/M=1/R=$winNameStr			// Put panel near the graph
	
	StructPut /S s, structStr
	DrawText 15,20,"Draw marquee and press continue..."
	DrawText 15,35,"Can also use a marquee to zoom-in"
	Button buttonContinue, win=$panelNameStr, pos={80,50},size={92,20}, title="Continue", proc=ATH_Marquee#UserSetMarquee_ContButtonProc 
	Button buttonCancel, win=$panelNameStr, pos={80,80},size={92,20}, title="Cancel", proc=ATH_Marquee#UserSetMarquee_CancelBProc
	SetWindow $winNameStr userdata(sATH_Coords)=structStr 
	SetWindow $winNameStr userdata(sATH_panelNameStr)= panelNameStr
	SetWindow $panelNameStr userdata(sATH_winNameStr) = winNameStr 
	SetWindow $panelNameStr userdata(sATH_panelNameStr) = panelNameStr
	PauseForUser $panelNameStr, $winNameStr
	StructGet/S s, GetUserData(winNameStr, "", "sATH_Coords")
	
	if(s.canceled)
		GetMarquee/W=$winNameStr/K // Kill Marquee
		Abort
	endif
	leftR = s.left
	rightR = s.right
	topR = s.top
	bottomR = s.bottom
	return [leftR, rightR , topR, bottomR]
End

/// @function UserSetMarquee_ContButtonProc
/// @brief Description of UserSetMarquee_ContButtonProc.
/// @details
/// Auto-generated documentation stub for function `UserSetMarquee_ContButtonProc`.
/// @param &B_Struct Parameter &B_Struct.
/// @returns Variable Return value.

static Function UserSetMarquee_ContButtonProc(STRUCT WMButtonAction &B_Struct): ButtonControl

	switch(B_Struct.eventCode)	// numeric switch
		case 2:	// "mouse up after mouse down"
			STRUCT sUserMarqueePositions s
			string winNameStr = GetUserData(B_Struct.win, "", "sATH_winNameStr")
			StructGet/S s, GetUserData(winNameStr, "", "sATH_Coords")
			string structStr, xaxis, yaxis
			[xaxis, yaxis] = ATH_Graph#GetAxes(grfName = winNameStr)
			GetMarquee/W=$winNameStr/K $xaxis, $yaxis
			s.left = V_left
			s.right = V_right
			s.top = V_top
			s.bottom = V_bottom
			s.canceled = 0
			StructPut/S s, structStr
			SetWindow $winNameStr userdata(sATH_Coords) = structStr
			KillWindow/Z $GetUserData(B_Struct.win, "", "sATH_panelNameStr")
			break
	endswitch
	return 0
End

/// @function UserSetMarquee_CancelBProc
/// @brief Description of UserSetMarquee_CancelBProc.
/// @details
/// Auto-generated documentation stub for function `UserSetMarquee_CancelBProc`.
/// @param &B_Struct Parameter &B_Struct.
/// @returns Variable Return value.

static Function UserSetMarquee_CancelBProc(STRUCT WMButtonAction &B_Struct) : ButtonControl

	switch(B_Struct.eventCode)	// numeric switch
		case 2:	// "mouse up after mouse down"
			STRUCT sUserMarqueePositions s
			string winNameStr = GetUserData(B_Struct.win, "", "sATH_winNameStr")
			StructGet/S s, GetUserData(winNameStr, "", "sATH_Coords")
			string structStr
			s.left = 0
			s.right = 0
			s.top = 0
			s.bottom = 0
			s.canceled = 1
			StructPut/S s, structStr
			SetWindow $winNameStr userdata(sATH_Coords) = structStr
			KillWindow/Z $GetUserData(B_Struct.win, "", "sATH_panelNameStr")
			break
	endswitch
	return 0
End
// End of marquee coordinates
